OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Record signal files & session info
  for this online test
Comment
  Here we're not classifying class1 vs. class2
  but class vs "no class"

  ==> we don't care about baseline, only about [stim+delay ; stim+delay+duration]
Comment
  Direct feedback
  You can replace "Matrix Display"
  with any other visualization technique
Comment
  Feedback using classification
  You can replace "Graz Viz" with another
  visualization technique...
Settings
  EEGDataLive = motor-imagery-live.ov
  ClassifWeights = classifier-weights.xml
  MI_Stimulations = mi-stimulations.lua
  ChannelNames = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;FCz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  ConnectivityLength = 1
  ConnectivityOverlap = 0
  AutoRegressiveOrder = 19
  PsdSize = 500
  ConnectivityShift = 1
  StimulationEpoch = 3
  StimulationDelay = 0

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/Train_2_sub_01.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#1.Experiment information, Input stream 2=#1.Signal stream, Input stream 3=#1.Stimulations -> Identity => #2
#2.Output stream 2 -> 0x341d3912 Channel Rename => #3
  New channel names = $var{ChannelNames}
Input stream 1=#2.Output stream 1, Input stream 2=#3, Input stream 3=#2.Output stream 3 -> Identity => #4
#4.Output stream 2 -> 0x341d3912 Common Average Reference
Input stream 1=#4.Output stream 2, Input stream 2=#4.Output stream 3 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #7
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 2
-> Identity "SPLIT CONNECT"
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #15
  Averaging type = Epoch block average
  Epoch count = 18.0
#7 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #20
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#20.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #23
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#15, Input stream 2=#23 -> Feature aggregator => #24
Features=#24 -> Classifier processor => #25
  Filename to load configuration from = $var{ClassifWeights}
#25.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#6.Output stream 1 -> Channel Selector
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #29
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#29.PSD -> Frequency Band Selector NF
  Frequencies to select = 22
-> Spectrum Average => #31
  Considers zeros = false
Experiment information=#4.Output stream 1, Signal=#4.Output stream 2, Stimulations=#4.Output stream 3 -> EDF File Writer
  Filename = ${Player_ScenarioDirectory}/Test-[$core{date}-$core{time}].edf
Input stream 1=#4.Output stream 1, Input stream 2=#4.Output stream 2, Input stream 3=#4.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/Test-[$core{date}-$core{time}].ov
  Use compression = false
Input signal=#2.Output stream 2, Input stimulations=#2.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = 0.5
  Epoch offset (in sec) = 20
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
-> AutoRegressive Coefficients => #35
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#35.PSD -> Frequency Band Selector
  Frequencies to select = 5
-> Spectrum Average => #37
  Considers zeros = false
Input stream 1=#25.Probability values, Input stream 2=#37 -> Streamed matrix multiplexer
-> TCP Writer
  Port = 5978
  Output format = Raw
#1.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Graz Motor Imagery BCI Stimulator => #41
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Baseline Duration (in sec) = 20
  Wait For Cue Duration (in sec) = 3
  Reaction Time (in sec) = 1.0
  MI Task Duration (in sec) = 3.0
  End of Trial Minimum Duration (in sec) = 2.000
  End of Trial Maximum Duration (in sec) = 3.500
Stimulation=#41, Amplitude=#31 -> CursorInterface
  Show Instruction = true
  Show Feedback = true
  Delay feedback = false
  Show Accuracy = false
  Prediction to integrate = 5
  Positive Feedback only = false
  Fullscreen = false
  Mode of Display = 2
  Mode of Classification = 1
  Display Score = false
#41 -> TCP Writer
  Port = 5698
  Output format = String
